// Description: affine

//** The internal pixel type, used for internal computations
// Leave to float in general.
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

//** The dimensions of the fixed and moving image
(FixedImageDimension 3)
(MovingImageDimension 3)

//** Registration setup
(Registration "MultiResolutionRegistration")
(NumberOfResolutions 2)
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(ImagePyramidSchedule 8 8 8 1 1 1)

//** Optimizer
(Optimizer "AdaptiveStochasticGradientDescent")
(MaximumNumberOfIterations 500)
//(ASGDParameterEstimationMethod "DisplacementDistribution")

//** Transformation
(Transform "AffineTransform")
//(Transform "EulerTransform")
(ErodeMask "false")
//(Scales 200000.0)
(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "true")
(AutomaticTransformInitializationMethod "GeometricalCenter")

//** Metric
(Metric "AdvancedMattesMutualInformation")
(NumberOfHistogramBins 32)

//** Sampler
(ImageSampler "RandomCoordinate")
(FixedImageBSplineInterpolationOrder 1 )
//(UseRandomSampleRegion "true")
//(SampleRegionSize 90.0 111.0 29.0 )
(NumberOfSpatialSamples 3000)
(NewSamplesEveryIteration "true")

//** Interpolator
(Interpolator "LinearInterpolator")

(ResampleInterpolator "FinalBSplineInterpolator")
(FinalBSplineInterpolationOrder 3)
(Resampler "DefaultResampler")




(HowToCombineTransforms "Compose")

(WriteResultImage "true")
(WriteResultImageAfterEachResolution "false") 
(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(ResultImageFormat "mhd")

//Number of grey level bins in each resolution level:
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)


//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

(ShowMetricValues "true")
(ShowExactMetricValue "false")
(CheckNumberOfSamples "true")
(UseMultiThreadingForMetrics "true")
(NumberOfFixedHistogramBins 32)
(NumberOfMovingHistogramBins 32)
(FiniteDifferenceDerivative "false")
(MaximumNumberOfSamplingAttempts 0)
(UseDirectionCosines "true")
